CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_Plate_(?P<type>[A-Za-z]{1,2})_p00_0_(?P<Well>[A-Za-z][0-9]{2})f(?P<Site>[0-9]{2})d(?P<Wavelength>[0-9])(?P<format>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Wavelength "2") (file doesnot contain "Simple") (metadata does format ".TIF")
    Name to assign these images:DDX4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "1") (metadata does format ".TIF")
    Name to assign these images:EdU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "0") (metadata does format ".TIF") (file doesnot contain "labels") (metadata does type "R")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Wavelength "0") (file does contain "labels.tif")
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    Name to assign these objects:stardistnuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Plate

MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:stardistnuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:stardistnuclei
    Name the output objects:Filterednuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:Yes
    Maximum value:48
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Filterednuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - B
    Select the input image:DDX4
    Number of pixels by which to expand the primary objects:20
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:Filterednuclei
    Name the objects to be identified:IdentifyEnv
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DDX4
    Number of pixels by which to expand the primary objects:24
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:9|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:Filterednuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

IdentifyTertiaryObjects:[module_num:10|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
    Select the larger identified objects:IdentifyEnv
    Select the smaller identified objects:Filterednuclei
    Name the tertiary objects to be identified:Env
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:DDX4, DNA, EdU
    Select objects to measure:Cytoplasm, Filterednuclei, IdentifySecondaryObjects

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:DDX4
    Select objects to measure:Env

MeasureColocalization:[module_num:13|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
    Select images to measure:DDX4, DNA
    Set threshold as percentage of maximum intensity for the images:25.0
    Select where to measure correlation:Within objects
    Select objects to measure:Filterednuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

MeasureObjectIntensityDistribution:[module_num:14|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
    Select images to measure:DDX4, DNA
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:5
    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:7
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
MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:EdU
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cytoplasm, Filterednuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:17|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
    Select images to measure:DDX4, DNA
    Select objects to measure:Cytoplasm, Env, Filterednuclei
    Enter how many gray levels to measure the texture at:128
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:8

ClassifyObjects:[module_num:18|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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select a class:positive
    Name the output objects:CombinedObjects
    Select the object name:Filterednuclei
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:Yes
    Select the location of the classifier model file:Elsewhere...|/uufs/chpc.utah.edu/common/HIPAA/proj_paternabio/image_analysis/v7_DDX4_EdU
    Rules or classifier file name:DDX4_EdU_v8.4_trainingset_2_scikitlearn_141post1_GB_1.model
    Allow fuzzy feature matching?:Yes

FilterObjects:[module_num:19|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
    Select the objects to filter:Filterednuclei
    Name the output objects:cytoDDX4_EdU_unfiltered
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Elsewhere...|/uufs/chpc.utah.edu/common/HIPAA/proj_paternabio/image_analysis/v7_DDX4_EdU
    Rules or classifier file name:rules.txt
    Class number:1
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Allow fuzzy feature matching?:Yes

MaskObjects:[module_num:20|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
    Select objects to be masked:cytoDDX4_EdU_unfiltered
    Name the masked objects:cytoDDX4_EdU
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CombinedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

FilterObjects:[module_num:21|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
    Select the objects to filter:Filterednuclei
    Name the output objects:Filtered_cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_EdU
    Filter using a minimum measurement value?:Yes
    Minimum value:0.04
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:25
    Filter using a maximum measurement value?:Yes
    Maximum value:38
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
MaskObjects:[module_num:22|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
    Select objects to be masked:Filtered_cells
    Name the masked objects:Filtered_somatics
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CombinedObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

FilterObjects:[module_num:23|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
    Select the objects to filter:Filterednuclei
    Name the output objects:Filtered_DDX4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MaxIntensity_DDX4
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:13
    Filter using a maximum measurement value?:Yes
    Maximum value:35
    Select the measurement to filter by:Intensity_MaxIntensity_EdU
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.0399
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
CombineObjects:[module_num:24|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
    Select initial object set:Filtered_DDX4
    Select object set to combine:CombinedObjects
    Select how to handle overlapping objects:Merge
    Name the combined object set:Combined_DDX4

IdentifySecondaryObjects:[module_num:25|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
    Select the input objects:CombinedObjects
    Name the objects to be identified:SecondaryCombinedObjects
    Select the method to identify the secondary objects:Distance - B
    Select the input image:DDX4
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:2.0
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
MeasureObjectNeighbors:[module_num:26|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
    Select objects to measure:SecondaryCombinedObjects
    Select neighboring objects to measure:SecondaryCombinedObjects
    Method to determine neighbors:Within a specified distance
    Neighbor distance:8
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
GrayToColor:[module_num:27|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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:DDX4
    Select the image to be colored green:EdU
    Select the image to be colored blue:DNA
    Name the output image:ColorImage
    Relative weight for the red image:1.5
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.3
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
OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlaycyto
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:yellow
    Select objects to display:CombinedObjects

DisplayDataOnImage:[module_num:29|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
    Display object or image measurements?:Object
    Select the input objects:SecondaryCombinedObjects
    Measurement to display:Neighbors_NumberOfNeighbors_8
    Select the image on which to display the measurements:OrigOverlaycyto
    Text color:#04FB0B
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Times New Roman
    Use scientific notation?:No
    Font weight:bold

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DDX4
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:neighbors
    Saved file format:jpeg
    Output file location:Default Output Folder|C:\\\\Users\\\\olsen\\\\Desktop\\\\Images\\\\QC_NB_output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Filterednuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:IdentifySecondaryObjects
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Env
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
