CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does T "2")
    Name to assign these images:SSEA4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does T "0")
    Name to assign these images:DDX4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does SizeT "1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "labels.tif")
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    Name to assign these objects:stardist_nuclei
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:stardist_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:stardist_nuclei
    Name the output objects:Filterednuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:11
    Filter using a maximum measurement value?:Yes
    Maximum value:38
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Filterednuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Distance - B
    Select the input image:DDX4
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:Filterednuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DNA
    Select objects to measure:Cytoplasm, Filterednuclei, IdentifySecondaryObjects

MeasureColocalization:[module_num:10|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
    Select images to measure:DDX4, DNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Filterednuclei
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:No
    Calculate the Rank Weighted Colocalization coefficients?:No
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:Yes
    Method for Costes thresholding:Faster

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:DDX4, DNA, SSEA4
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:7
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
MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cytoplasm, Filterednuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Filterednuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:IdentifySecondaryObjects
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
